# Generated by Configurator on Wed May 15 20:02:56 EDT 2019

# Reset
Property,Core,Initialize,0

# Devices
Device,COM3,SerialManager,COM3
Device,PM Cam,PVCAM,Camera-1
Device,ASIFWController,ASIFW1000,ASIFWController
Device,ASIFilterWheel,ASIFW1000,ASIFilterWheel

# Pre-init settings for devices
Property,COM3,AnswerTimeout,500.0000
Property,COM3,BaudRate,115200
Property,COM3,DataBits,8
Property,COM3,DelayBetweenCharsMs,0.0000
Property,COM3,Handshaking,Off
Property,COM3,Parity,None
Property,COM3,StopBits,1
Property,COM3,Verbose,1
Property,ASIFWController,Port,COM3
Property,ASIFilterWheel,ASIFilterWheelNumber,0

# Pre-init settings for COM ports

# Hub (parent) references

# Initialize
Property,Core,Initialize,1

# Delays

# Focus directions

# Roles
Property,Core,Camera,PM Cam
Property,Core,AutoShutter,1

# Camera-synchronized devices

# Labels
# ASIFilterWheel
Label,ASIFilterWheel,7,State-7
Label,ASIFilterWheel,6,State-6
Label,ASIFilterWheel,5,Open
Label,ASIFilterWheel,4,Blue
Label,ASIFilterWheel,3,Green
Label,ASIFilterWheel,2,Red
Label,ASIFilterWheel,1,Closed
Label,ASIFilterWheel,0,State-0

# Configuration presets
# Group: .PrimeLocate # of Regions
# Preset: NewPreset
ConfigGroup,.PrimeLocate # of Regions,NewPreset,PM Cam,CentroidsCount,512


# Group: SMART Streaming Exposure Time
# Preset: NewPreset
ConfigGroup,SMART Streaming Exposure Time,NewPreset,PM Cam,SMARTStreamingValues[ms],10.000;20.000;30.000;40.000


# Group: Fan Speed
# Preset: Medium
ConfigGroup,Fan Speed,Medium,PM Cam,FanSpeedSetpoint,Medium

# Preset: High
ConfigGroup,Fan Speed,High,PM Cam,FanSpeedSetpoint,High

# Preset: Low
ConfigGroup,Fan Speed,Low,PM Cam,FanSpeedSetpoint,Low


# Group: .PrimeEnhance
# Preset: No
ConfigGroup,.PrimeEnhance,No,PM Cam,PP  5   ENABLED,No

# Preset: Yes
ConfigGroup,.PrimeEnhance,Yes,PM Cam,PP  5   ENABLED,Yes


# Group: .PrimeLocate
# Preset: No
ConfigGroup,.PrimeLocate,No,PM Cam,CentroidsEnabled,No

# Preset: Yes
ConfigGroup,.PrimeLocate,Yes,PM Cam,CentroidsEnabled,Yes


# Group: SMART Streaming
# Preset: No
ConfigGroup,SMART Streaming,No,PM Cam,SMARTStreamingEnabled,No

# Preset: Yes
ConfigGroup,SMART Streaming,Yes,PM Cam,SMARTStreamingEnabled,Yes


# Group: HW Timestamp
# Preset: No
ConfigGroup,HW Timestamp,No,PM Cam,MetadataEnabled,No

# Preset: Yes
ConfigGroup,HW Timestamp,Yes,PM Cam,MetadataEnabled,Yes


# Group: Clear Mode
# Preset: Never
ConfigGroup,Clear Mode,Never,PM Cam,ClearMode,Never

# Preset: Pre-Sequence
ConfigGroup,Clear Mode,Pre-Sequence,PM Cam,ClearMode,Pre-Sequence

# Preset: Post-Sequence
ConfigGroup,Clear Mode,Post-Sequence,PM Cam,ClearMode,Post-Sequence

# Preset: Pre-Exposure and Post-Sequence
ConfigGroup,Clear Mode,Pre-Exposure and Post-Sequence,PM Cam,ClearMode,Pre-Exposure and Post-Sequence

# Preset: Pre-Exposure
ConfigGroup,Clear Mode,Pre-Exposure,PM Cam,ClearMode,Pre-Exposure

# Preset: Pre- and Post-Sequence
ConfigGroup,Clear Mode,Pre- and Post-Sequence,PM Cam,ClearMode,Pre- and Post-Sequence


# Group: .PrimeLocate Radius
# Preset: NewPreset
ConfigGroup,.PrimeLocate Radius,NewPreset,PM Cam,CentroidsRadius,15


# Group: Colours
# Preset: Open
ConfigGroup,Colours,Open,ASIFilterWheel,Label,Open
ConfigGroup,Colours,Open,PM Cam,Exposure,10.0000

# Preset: State-0
ConfigGroup,Colours,State-0,ASIFilterWheel,Label,State-0
ConfigGroup,Colours,State-0,PM Cam,Exposure,500.0000

# Preset: Green
ConfigGroup,Colours,Green,ASIFilterWheel,Label,Green
ConfigGroup,Colours,Green,PM Cam,Exposure,100.0000

# Preset: Red
ConfigGroup,Colours,Red,ASIFilterWheel,Label,Red
ConfigGroup,Colours,Red,PM Cam,Exposure,500.0000

# Preset: State-7
ConfigGroup,Colours,State-7,ASIFilterWheel,Label,State-7
ConfigGroup,Colours,State-7,PM Cam,Exposure,500.0000

# Preset: State-6
ConfigGroup,Colours,State-6,ASIFilterWheel,Label,State-6
ConfigGroup,Colours,State-6,PM Cam,Exposure,500.0000

# Preset: Blue
ConfigGroup,Colours,Blue,ASIFilterWheel,Label,Blue
ConfigGroup,Colours,Blue,PM Cam,Exposure,100.0000

# Preset: Closed
ConfigGroup,Colours,Closed,ASIFilterWheel,Label,Closed
ConfigGroup,Colours,Closed,PM Cam,Exposure,500.0000



# PixelSize settings

